;20210430
;DxDx correlation under Hamiltonian (cnst1-cnst3)XX+(cnst2-cnst1)YY+(cnst3-cnst2)ZZ+(180 deg)*Z
;frame change 10 deg
;Automatically created by Ken16pp.m

define delay tau1
"tau1=d3*(1-cnst2+cnst3)-p1/2"
define delay tau2
"tau2=d3*(1-cnst1+cnst2)-p1"
define delay tau3
"tau3=2*d3*(1+cnst1-cnst3)-p1"
define delay cycle
"cycle=24*d3"
 
"l10=4"

1  ze
 
2  d1 rpp10 rpp11 rpp12 rpp13 
   cycle pl2:f2 
   (p3 ph0):f2
   d2
   (p2 ph1):f2
   d13
   (p1 ph4):f2

3
   tau1
   (p1 ph10^):f2
   tau2
   (p1 ph11^):f2
   tau3
   (p1 ph12^):f2
   tau2
   (p1 ph13^):f2
   tau1
 
   lo to 3 times l10
 
   (p1 ph5):f2
   d13
   (p2 ph6):f2

   go=2 ph31

  1m wr #0 if #0

; increase counter
  10m ip5*340
  1m iu10
  1m iu10
  1m iu10
  1m iu10

  lo to 2 times td1

  exit

ph0 = (360) {350}*2 {170}*2
ph1 = {1}*2 {3}*2
ph4 = (360) {80}*4 {260}*4
ph10 = (360) 0 40 260 300 340 20 240 280 320 0 220 260 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320 
ph11 = (360) 100 140 0 40 80 120 340 20 60 100 320 0 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60 
ph12 = (360) 110 150 10 50 90 130 350 30 70 110 330 10 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70 
ph13 = (360) 30 70 290 330 10 50 270 310 350 30 250 290 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350 
ph5 = (360) {250}*4 {70}*4
ph6 = 1 3
ph31 = 0  2  0  2  0  2  0  2
