; delay definitions
define delay tau1
"tau1=d3*(1+cnst1+2*cnst2)-p1/2"
define delay tau2
"tau2=d3*(1-cnst2)-p1"
define delay tau3 
"tau3 = 2*d3*(1-cnst2)-p1"
define delay tau1p 
"tau1p = d3*2*(1-cnst1+2*cnst2)-p1"
define delay tau1r
"tau1r=d3*(1-cnst1-2*(cnst2+.01))-p1/2"
define delay tau2r
"tau2r=d3*(1+(cnst2+.01))-p1"
define delay tau3r 
"tau3r = 2*d3*(1+(cnst2+.01))-p1"
define delay tau1pr 
"tau1pr = d3*2*(1+cnst1-2*(cnst2+.01))-p1"
"l1=0"  ; start the evolution counter at 0

1   ze

2
d1 rpp1 rpp2 rpp3 rpp4 rpp7 rpp8 rpp9 rpp10
100u pl2:f2

(p1 ph0):f2

4
tau1
(p1 ph1^):f2
tau2
(p1 ph2^):f2
tau3
(p1 ph3^):f2
tau2
(p1 ph4^):f2
tau1p
(p1 ph1^):f2
tau2
(p1 ph2^):f2
tau3
(p1 ph3^):f2
tau2
(p1 ph4^):f2
tau1

lo to 4 times l1


(p1 ph5):f2
2u
(p1 ph6):f2


6
tau1r
(p1 ph7^):f2
tau2r
(p1 ph8^):f2
tau3r
(p1 ph9^):f2
tau2r
(p1 ph10^):f2
tau1pr
(p1 ph7^):f2
tau2r
(p1 ph8^):f2
tau3r
(p1 ph9^):f2
tau2r
(p1 ph10^):f2
tau1r

lo to 6 times l1

(p1 ph11):f2

1m
(p1 ph30):f2

go=2 ph31
1m wr #0 if #0

50m ip6*18
50m ip7*18
50m ip8*18
50m ip9*18
50m ip10*18
50m ip11*18

lo to 2 times td2

iu1
iu1

50m ip5*176
50m ip6*176
50m ip7*176
50m ip8*176
50m ip9*176
50m ip10*176
50m ip11*352

lo to 2 times td1

exit

ph0 = (360) 90 270

ph1 = (360) 11 55 279 323 187 231 95 139 3 47 271 315 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227
ph2 = (360) 112 156 20 64 288 332 196 240 104 148 12 56 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328
ph3 = (360) 123 167 31 75 299 343 207 251 115 159 23 67 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339
ph4 = (360) 44 88 312 356 220 264 128 172 36 80 304 348 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260

ph5 = (360) 101 281
ph6 = (360) 292 112

ph7 = (360) 33 77 301 345 209 253 117 161 25 69 293 337 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249
ph8 = (360) 134 178 42 86 310 354 218 262 126 170 34 78 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350
ph9 = (360) 145 189 53 97 321 5 229 273 137 181 45 89 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1
ph10 = (360) 66 110 334 18 242 286 150 194 58 102 326 10 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282

ph11 = (360) 303 123

ph30 = (360) 90 270
ph31 = 0 2