; STABER sequence test (name pending)
; discovered by lance berkey
; 10 July 2024

; delays
define delay delay0
"delay0=(d20-p1)/2"
define delay delay1
"delay1=d20-p1"
"l1=0"

1  ze

2   ; state & pp reset delay
    d1 rpp0 rpp1 rpp2 rpp3
    100u pl2:f2

3   ; sequence
    delay0
    (p1 ph0^):f2
    delay1
    (p1 ph1^):f2
    delay1
    (p1 ph2^):f2
    delay1
    (p1 ph3^):f2
    delay0

    delay0
    (p1 ph0^):f2
    delay1
    (p1 ph1^):f2
    delay1
    (p1 ph2^):f2
    delay1
    (p1 ph3^):f2
    delay0
    
    lo to 3 times l1

    ; kill transients
    1m

    ; measure
    (p1 ph29):f2
    20u
    (p1 ph30):f2

    go=2 ph31
    1m wr #0 if #0

    ; increase evolution time by 2 cycle length, and re-scan
    1m iu1
    1m iu1
    1m iu1
    lo to 2 times td1

    exit

; phase programs
ph0 = (360) 0 180 0
ph1 = (360) 90 90 90
ph2 = (360) 180 180 0
ph3 = (360) 270 270 90

; measurement sequence for solid echo
ph29 = 0 2
ph30 = 1 3
ph31 = 0 2