; 13 June 2024
; Andrew Stasiuk

define delay tau1
"tau1 = d3*(1+cnst1+2*cnst2)-p1/2"
define delay tau2
"tau2 = d3*(1-cnst2)-p1"
define delay tau3
"tau3 = 2*d3*(1-cnst2)-p1"

define delay tau1p
"tau1p = d3*(1-cnst1+2*cnst2)-p1/2"

define delay cycle
"cycle=24*d3"
"l1=2"

1  ze

2   ; state & pp reset delay
    d1 rpp1 rpp2 rpp3 rpp4 rpp15 rpp16 rpp17 rpp18
    100u pl2:f2

; Random Zeeman State Preparation
    (p1 ph0):f2

3 ; repeated ken to encode disorder
    tau1
    (p1 ph1^):f2
    tau2
    (p1 ph2^):f2
    tau3
    (p1 ph3^):f2
    tau2
    (p1 ph4^):f2
    tau1p

    tau1p
    (p1 ph1^):f2
    tau2
    (p1 ph2^):f2
    tau3
    (p1 ph3^):f2
    tau2
    (p1 ph4^):f2
    tau1

    lo to 3 times l1

    (p1 ph5):f2
    

; Hamiltonian Evolution
4  2.5u ; something goes here eventually



; Random Zeeman Observable Engineering
    (p1 ph14):f2

5 ; repeated ken to disorder observable
    tau1
    (p1 ph15^):f2
    tau2
    (p1 ph16^):f2
    tau3
    (p1 ph17^):f2
    tau2
    (p1 ph18^):f2
    tau1p

    tau1p
    (p1 ph15^):f2
    tau2
    (p1 ph16^):f2
    tau3
    (p1 ph17^):f2
    tau2
    (p1 ph18^):f2
    tau1

    lo to 5 times l1

    ; shelf in Z, then measure
    (p1 ph19):f2
    1m
    (p1 ph29):f2
    20u
    (p1 ph30):f2

    go=2 ph31
    1m wr #0 if #0


    25m ip5*176
    25m ip14*176
    25m ip15*176
    25m ip16*176
    25m ip17*176
    25m ip18*176
    25m ip19*352

    ; increment ken time
    5m iu1
    5m iu1
    lo to 2 times td1

  exit



ph0 = (360) 90 90 270 270 0 0 180 180

ph1 = (360) 11 55 279 323 187 231 95 139 3 47 271 315 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227
ph2 = (360) 112 156 20 64 288 332 196 240 104 148 12 56 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328
ph3 = (360) 123 167 31 75 299 343 207 251 115 159 23 67 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339
ph4 = (360) 44 88 312 356 220 264 128 172 36 80 304 348 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260

ph5 = (360) 187 187 7 7 97 97 277 277

ph14 = (360) 198 198 198 198 198 198 198 198

ph15 = (360) 209 253 117 161 25 69 293 337 201 245 109 153 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65
ph16 = (360) 310 354 218 262 126 170 34 78 302 346 210 254 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166
ph17 = (360) 321 5 229 273 137 181 45 89 313 357 221 265 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177
ph18 = (360) 242 286 150 194 58 102 326 10 234 278 142 186 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98

ph19 = (360) 295 295 295 295 295 295 295 295


ph29 = 0 2
ph30 = 1 3
ph31 = 0 2
