; STABER sequence test (name pending)
; discovered by lance berkey
; 10 July 2024

; delays
define delay delay0
"delay0=(d20-p1)/2"
define delay delay1
"delay1=d20-p1"
"l1=0"

1  ze

2   ; state & pp reset delay
    d1 rpp0 rpp1 rpp2 rpp3
    100u pl2:f2

    (p1 ph27):f2
    1.5u

3   ; sequence
    delay0
    (p1 ph0^):f2
    delay1
    (p1 ph1^):f2
    delay1
    (p1 ph2^):f2
    delay1
    (p1 ph3^):f2
    delay0

    delay0
    (p1 ph0^):f2
    delay1
    (p1 ph1^):f2
    delay1
    (p1 ph2^):f2
    delay1
    (p1 ph3^):f2
    delay0

    delay0
    (p1 ph0^):f2
    delay1
    (p1 ph1^):f2
    delay1
    (p1 ph2^):f2
    delay1
    (p1 ph3^):f2
    delay0
    
    lo to 3 times l1

    1.5u
    (p1 ph28):f2

    ; kill transients
    1m

    ; measure
    (p1 ph29):f2
    20u
    (p1 ph30):f2

    go=2 ph31
    1m wr #0 if #0

    ; increase evolution time by 2 cycle length, and re-scan
    1m iu1
    1m iu1
    5m ip28*264
    lo to 2 times td1

    exit

; phase programs

ph27 = (360) 79 259

ph0 = (360) 90 44 178 312 356 220 354 308 82 216 260 124 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196
ph1 = (360) 11 55 279 323 97 141 275 319 183 227 1 45 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117
ph2 = (360) 22 246 290 244 288 242 286 150 194 148 192 146 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218
ph3 = (360) 303 257 31 345 209 253 207 161 295 249 113 157 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229

ph28 = (360) 270 90

; measurement sequence for solid echo
ph29 = 0 2
ph30 = 1 3
ph31 = 0 2