; 18 January 2023
; Andrew Stasiuk
; unknown hamiltonian
; frame change 13

; cnst1 = .06, 
define delay tau1
"tau1 = d3*(1+2*cnst2)-p1/2"
define delay tau2
"tau2 = d3*(1-cnst2)-p1"
define delay tau3
"tau3 = 2*d3*(1-cnst2)-p1"
define delay cycle

"cycle=24*d3"

"l1=0"

1   ze
    ; increment the time reversal phase programs by fc*16
    25m ip4*208
    25m ip5*208
    25m ip6*208
    25m ip7*208

2
    d1 rpp0 rpp1 rpp2 rpp3 rpp4 rpp5 rpp6 rpp7
    cycle pl2:f2

3
    tau1
    (p1 ph0^):f2
    tau2
    (p1 ph1^):f2
    tau3
    (p1 ph2^):f2
    tau2
    (p1 ph3^):f2
    tau1

    lo to 3 times l1

4
    tau1
    (p1 ph4^):f2
    tau2
    (p1 ph5^):f2
    tau3
    (p1 ph6^):f2
    tau2
    (p1 ph7^):f2
    tau1

    lo to 4 times l1

    1m
    (p1 ph29):f2
    20u
    (p1 ph30):f2

    go=2 ph31
    1m wr #0 if #0

    ; increase time evolution counters
    15m iu1
    15m iu1
    15m iu1
    15m iu1

    ; increment the time reversal phase programs by fc*16 to account for additional evolution
    25m ip4*208
    25m ip5*208
    25m ip6*208
    25m ip7*208
    lo to 2 times td1

   
  exit

ph0 = (360) 0 52 284 336 208 260 132 184 56 108 340 32 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288
ph1 = (360) 103 155 27 79 311 3 235 287 159 211 83 135 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31
ph2 = (360) 116 168 40 92 324 16 248 300 172 224 96 148 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44
ph3 = (360) 39 91 323 15 247 299 171 223 95 147 19 71 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327

ph4 = (360) 90 142 14 66 298 350 222 274 146 198 70 122 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18
ph5 = (360) 13 65 297 349 221 273 145 197 69 121 353 45 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301
ph6 = (360) 26 78 310 2 234 286 158 210 82 134 6 58 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314
ph7 = (360) 129 181 53 105 337 29 261 313 185 237 109 161 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57

ph29 = 0 2
ph30 = 1 3
ph31 = 0 2