; 29 July 2022
; Andrew Stasiuk

; Kicking between yxx24 decoupling sequence
; DTC Experiments
; theta=180
; no framechange


#include <Avance.incl>

define delay tau0
"tau0=(d13-p1)/2"
define delay tau1
"tau1=(d13-p1)"

"l10=0"

1  ze

2  d1 rpp0 rpp1 rpp2 rpp3 rpp4 rpp5
  1m pl2:f2

3
    tau0
    (p1 ph0^):f2
    tau1
    (p1 ph1^):f2
    tau1
    (p1 ph2^):f2
    tau1
    (p1 ph3^):f2
    tau0

  lo to 3 times l10

    1m
    (p1 ph20):f2

    go=2 ph31

    1m wr #0 if #0

    5m iu10
    5m iu10
    5m iu10
    5m iu10
    5m iu10
    5m iu10

  lo to 2 times td1

exit

ph0 = 3 2 0 1 0 2
ph1 = 0 2 3 2 0 1
ph2 = 2 1 0 0 3 2
ph3 = 1 2 0 1 0 0

ph4 = 0 2 2 0
ph5 = 0 2 2 0

ph20 = 1 3 3 1
ph31 = 0 2 2 0
