; 3 April 2023
; Cory48
; No Framechange
; d20 should be at least p1+2.5u, 5u seems to work well. 3.5u would be tight

define delay mq3
"mq3=d20 - p1/2";

define delay mq5
"mq5=d20 - p1";

define delay cycle
"cycle=24*3*d20";

"l10=0"

1 ze

2
    d1 rpp0 rpp1 rpp2 rpp3 rpp4 rpp5 rpp6 rpp7
    cycle pl2:f2

    (p1 ph28):f2

3
     mq3
     (p1 ph0^):f2
     mq5
     (p1 ph1^):f2
     mq3

     mq3
     (p1 ph2^):f2
     mq5
     (p1 ph3^):f2
     mq3

     mq3
     (p1 ph4^):f2
     mq5
     (p1 ph5^):f2
     mq3

     mq3
     (p1 ph6^):f2
     mq5
     (p1 ph7^):f2
     mq3

  lo to 3 times l10

   2.5u
   (p1 ph29):f2
   1m
   (p1 ph30):f2

  go=2 ph31


  50m wr #0 if #0

  5m iu10
  5m iu10
  5m iu10
  5m iu10
  5m iu10
  5m iu10

  lo to 2 times td1


  exit

ph28 = (360) 90 90 270 270

ph0 = (360) 0 0 270 180 180 90
ph1 = (360) 90 270 180 90 270 180
ph2 = (360) 180 0 270 180 0 270
ph3 = (360) 90 90 180 270 270 0
ph4 = (360) 0 270 270 180 90 90
ph5 = (360) 90 180 0 90 180 0
ph6 = (360) 0 90 270 0 90 270
ph7 = (360) 90 180 180 270 0 0

; X observable, incremented each loop
ph29 = (360) 270 270 90 90

ph30= 1 3
ph31= 0 2
