; zdq_tpc_zz_pine8_trotter
; 25 May 2022
; ZZ TPC Experiment for effective H = g*Z + J*DQ
; Hamiltonian engineered by Pine8 Sequence and Trotter with virtual Z pulse
; theta = 50 deg
; Andrew Stasiuk

#include <Avance.incl>

; define the delays for Ken16
; p1 should be length of a 90 deg pulse (~ 1 us)

define delay tau0
"tau0 = (d2 - p1)/2"
define delay tau1
"tau1 = d2  - p1"
define delay tau2
"tau2 = 2 * d2 - p1"

; This delay is the length of the entire Ham Eng Cycle
; It is given by 12*d2, d2 should be  ~ 5 us.
define delay cycle
"cycle=12*d2"

; First measurement length.
; Measurements occur at intervals of cycle*(x+l1), x=0,...,td1
"l1=0"

; start the pulse program
1   ze

; state-reset delay, reset phase program for next scan
2   d1 rpp10
    ; set the power level of a 90 deg pulse to be pl1 on channel 2 (assuming pulse p1)
    cycle pl1:f2

; Ken16 Hamiltonian engineering
3
    tau0
    (p1 ph10^):f2
    tau2
    (p1 ph10^):f2
    tau1
    (p1 ph10^):f2
    tau2
    (p1 ph10^):f2
    tau1
    (p1 ph10^):f2
    tau2
    (p1 ph10^):f2
    tau1
    (p1 ph10^):f2
    tau2
    (p1 ph10^):f2
    tau0

    lo to 3 times l1

    1m

; Change observable from X to Z
4   (p1 ph30):f2

    go=2 ph31

    1m wr #0 if #0

    ; increase evolution time by 1 cycle length, and re-scan
    1m iu1
    lo to 2 times td1

    exit

; Pine8 phase programs
ph10 = 3 3 183 183 183 183 3 3 9 9 189 189 189 189 9 9 15 15 195 195 195 195 15 15 21 21 201 201 201 201 21 21 27 27 207 207 207 207 27 27 33 33 213 213 213 213 33 33 39 39 219 219 219 219 39 39 45 45 225 225 225 225 45 45 51 51 231 231 231 231 51 51 57 57 237 237 237 237 57 57 63 63 243 243 243 243 63 63 69 69 249 249 249 249 69 69 75 75 255 255 255 255 75 75 81 81 261 261 261 261 81 81 87 87 267 267 267 267 87 87 93 93 273 273 273 273 93 93
; final pulse phase program
ph30 = 1 3 3 1
ph31 = 0 2 2 0
