; zdq_tpc_zz_pine8_trotter_v2
; 26 May 2022
; ZZ TPC Experiment for effective H = g*Z + J*DQ
; Hamiltonian engineered by Pine8 Sequence and Trotter with virtual Z pulse
; theta = 12 deg
; Andrew Stasiuk

#include <Avance.incl>

; define the delays for Ken16
; p1 should be length of a 90 deg pulse (~ 1 us)

define delay tau0
"tau0 = (d2 - p1)/2"
define delay tau1
"tau1 = d2  - p1"
define delay tau2
"tau2 = 2 * d2 - p1"

; This delay is the length of the entire Ham Eng Cycle
; It is given by 12*d2, d2 should be  ~ 5 us.
define delay cycle
"cycle=12*d2"

; First measurement length.
; Measurements occur at intervals of cycle*(x+l1), x=0,...,td1
"l1=0"

; start the pulse program
1   ze

; state-reset delay, reset phase program for next scan
2   d1 rpp10
    ; set the power level of a 90 deg pulse to be pl1 on channel 2 (assuming pulse p1)
    cycle pl1:f2

; Ken16 Hamiltonian engineering
3
    tau0
    (p1 ph10^):f2
    tau2
    (p1 ph10^):f2
    tau1
    (p1 ph10^):f2
    tau2
    (p1 ph10^):f2
    tau1
    (p1 ph10^):f2
    tau2
    (p1 ph10^):f2
    tau1
    (p1 ph10^):f2
    tau2
    (p1 ph10^):f2
    tau0

    lo to 3 times l1

    1m

; Change observable from X to Z
4   (p1 ph30):f2

    go=2 ph31

    1m wr #0 if #0

    ; increase evolution time by 1 cycle length, and re-scan
    1m iu1
    lo to 2 times td1

    exit

; Pine8 phase programs
;12 deg
ph10 = (360) 0 0 180 180 180 180 0 0 348 348 168 168 168 168 348 348 336 336 156 156 156 156 336 336 324 324 144 144 144 144 324 324 312 312 132 132 132 132 312 312 300 300 120 120 120 120 300 300 288 288 108 108 108 108 288 288 276 276 96 96 96 96 276 276 264 264 84 84 84 84 264 264 252 252 72 72 72 72 252 252 240 240 60 60 60 60 240 240 228 228 48 48 48 48 228 228 216 216 36 36 36 36 216 216 204 204 24 24 24 24 204 204 192 192 12 12 12 12 192 192 180 180 0 0 0 0 180 180

; final pulse phase program
ph30 = 1 3 3 1
ph31 = 0 2 2 0
